PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = VERSION5
  logging level = debug
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Routines
  Routine instructions
    TextComponent instructions_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructionsloop
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    KeyboardComponent intruct_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = red
      letterHeight = 0.04
      pos = (0.45, -0.42)
      startVal [time (s)] = 0.0
      text = Press return to continue
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  Routine contingency2
    TextboxComponent resp2
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
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    KeyboardComponent endcont2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cont1
    CodeComponent code
      Code Type = Both
      Before Experiment:
        hcount = 0
      Begin Routine:
        if trials.thisN == 0: # only on the first iteration,
            loop_timer = core.Clock() # start a new timer

        hcount = 0
      Each Frame:
        if loop_timer.getTime() >= 20.0:
            continueRoutine = False
            trials.finished = True

        hcount = 0
    TextboxComponent key_Resp
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      padding = None
      size = (1,0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent endcont1
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent timer
      color = black
      disabled = True
      letterHeight = 0.1
      pos = (-0.6, -0.4)
      startVal [time (s)] = 0.0
      text = $loop_timer.getTime()
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    ImageComponent alien1
      image = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/aliens1.png
      pos = (-0.6, 0.4)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = $hcount
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  Routine introducecont2
    TextComponent instructions_round2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You now must resume communication with the alien commanders. You will need to communicate with the commanders by typing on your keyboard. Your messages need to be rapid, complete, and engaging. They should only include letter and punctuation keys, with no special characters, number keys, or function keys. Once you decide that your message is complete, hit the return key to send it and then begin a new message. Remember that these are alien species, so they do not think in the same way you do.

        Press return to begin
    KeyboardComponent endroutine
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cont2
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if trials.thisN == 0: #only on the first iteration,
            loop_timer = core.Clock() #start a new timer
      Begin Routine:
        if trials_2.thisN == 0: # only on the first iteration,
            loop_timer = core.Clock() # start a new timer
      Each Frame:
        if loop_timer.getTime() >= 10.0:
            continueRoutine = False
            trials_2.finished = True
    TextboxComponent key_Resp_2
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      padding = None
      size = (1,0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent endcont1_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent timer_2
      color = black
      disabled = True
      letterHeight = 0.1
      pos = (-0.6, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $round(15.0 - t, ndigits = 1)
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    TextComponent hostagecounter1_2
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = Hostage Count: 0
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    ImageComponent aliens2
      image = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/aliens2.png
      pos = (-0.6, 0.4)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine break_1
    TextComponent break_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        As the United States Interstellar Messenger and Decoder, we understand how tiresome this job title is. You may take a much-needed break.

        If you wish to skip your break and continue, please press enter.
    TextComponent breaktimer
      color = black
      letterHeight = 0.1
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $round(30.0 - t, ndigits = 1)
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    KeyboardComponent endbreak
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine practice_round
    TextComponent input_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent end
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent hcountprac
      color = black
      letterHeight = 0.05
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $hcount
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        hcount = 0
      Begin Routine:
        modify = False
        input_text.text = ''
        event.clearEvents('keyboard')

        if practice_trials.thisN == 0:
            hcount = 0
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                input_text.text = input_text.text + ' '
            elif 'backspace' in keys:
                input_text.text = input_text.text[:-1]
            elif 'period' in keys:
                input_text.text = input_text.text + '.'
            elif 'comma' in keys:
                input_text.text = input_text.text + ','
            elif 'apostrophe' in keys:
                input_text.text = input_text.text + '\''
            elif 'question' in keys:
                input_text.text = input_text.text + '?'
            elif 'exclamation' in keys:
                input_text.text = input_text.text + ''
            elif 'at' in keys:
                input_text.text = input_text.text + ''
            elif 'pound' in keys:
                input_text.text = input_text.text + ''
            elif 'dollar' in keys:
                input_text.text = input_text.text + ''
            elif 'percent' in keys:
                input_text.text = input_text.text + ''
            elif 'asciicircum' in keys:
                input_text.text = input_text.text + ''
            elif 'ampersand' in keys:
                input_text.text = input_text.text + ''
            elif 'asterisk' in keys:
                input_text.text = input_text.text + ''
            elif 'parenleft' in keys:
                input_text.text = input_text.text + ''
            elif 'parenright' in keys:
                input_text.text = input_text.text + ''
            elif 'underscore' in keys:
                input_text.text = input_text.text + ''
            elif 'minus' in keys:
                input_text.text = input_text.text + ''
            elif 'equal' in keys:
                input_text.text = input_text.text + ''
            elif 'plus' in keys:
                input_text.text = input_text.text + ''
            elif 'bracketleft' in keys:
                input_text.text = input_text.text + ''
            elif 'bracketright' in keys:
                input_text.text = input_text.text + ''
            elif 'braceleft' in keys:
                input_text.text = input_text.text + ''
            elif 'braceright' in keys:
                input_text.text = input_text.text + ''
            elif 'semicolon' in keys:
                input_text.text = input_text.text + ';'
            elif 'colon' in keys:
                input_text.text = input_text.text + ':'
            elif 'doublequote' in keys:
                input_text.text = input_text.text + ''
            elif 'backslash' in keys:
                input_text.text = input_text.text + ''
            elif 'slash' in keys:
                input_text.text = input_text.text + ''
            elif 'greater' in keys:
                input_text.text = input_text.text + ''
            elif 'less' in keys:
                input_text.text = input_text.text + ''
            elif 'quoteleft' in keys:
                input_text.text = input_text.text + ''
            elif 'asciitilde' in keys:
                input_text.text = input_text.text + ''
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    input_text.text = input_text.text + keys[0].upper()
                    modify = False
                else:
                    input_text.text = input_text.text + keys[0]
      End Routine:
        thisExp.addData("practice round input", input_text.text)

        if len(input_text.text) >=1:
            nextRoutineNreps = 1
            hcount += 1
        else:
            nextRoutineNreps = 0
    TextComponent displayhcount
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Hostage Count:
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    PolygonComponent text_border
      lineColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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  Routine practice_reinf
    ImageComponent hostage
      image = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/hostage1.png
      pos = (0.3, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    SoundComponent sound_1
      sound = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/raygun.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextboxComponent hostagetext
      bold = False
      color = Black
      editable = False
      letterHeight = 0.1
      padding = None
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = A hostage was released!
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  Routine cont1reinforcement
  Routine cont1reinf
    ImageComponent hostage_2
      image = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/hostage1.png
      pos = (0.3, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    SoundComponent sound_2
      sound = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/raygun.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextboxComponent hostagetext_2
      bold = False
      color = Black
      editable = False
      letterHeight = 0.1
      padding = None
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = A hostage was released!
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  Routine cont2reinf
    ImageComponent hostage_3
      image = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/hostage1.png
      pos = (0.3, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    SoundComponent sound_3
      sound = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/raygun.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextboxComponent hostagetext_3
      bold = False
      color = Black
      editable = False
      letterHeight = 0.1
      padding = None
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = A hostage was released!
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  Routine instructions_practice
    TextComponent practiceinstruct
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $practice_instructions
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent return_2
      color = red
      letterHeight = 0.04
      pos = (0.45, -0.42)
      startVal [time (s)] = 0.0
      text = Press return to continue
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  Routine instructions_round1
    TextComponent textinstruct
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_1
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent return_3
      color = red
      letterHeight = 0.04
      pos = (0.45, -0.42)
      startVal [time (s)] = 0.0
      text = Press return to continue
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  Routine reinforcement
    ImageComponent hostage_4
      image = hostage1.png
      pos = (0.4, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    SoundComponent sound_4
      sound = raygun.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent releasenotify
      color = black
      letterHeight = 0.1
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = A hostage has been released!
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  Routine halfkeyboard_condition
    TextComponent text_5
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        modify = False
        text_5.text = ''
        event.clearEvents('keyboard')

        if trials.thisN == 0:
            hcount = 0

        if not countdownStarted:
            countdownClock = core.CountdownTimer(600) # 300 s = 5 minutes
            countdownStarted = True
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_5.text = text_5.text + ' '
            elif 'backspace' in keys:
                text_5.text = text_5.text[:-1]
            elif 'period' in keys:
                text_5.text = text_5.text + '.'
            elif 'comma' in keys:
                text_5.text = text_5.text + ','
            elif 'apostrophe' in keys:
                text_5.text = text_5.text + '\''
            elif 'question' in keys:
                text_5.text = text_5.text + '?'
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_5.text = text_5.text + keys[0].upper()
                    modify = False
                else:
                    text_5.text = text_5.text + keys[0]

        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            trials.finished = True # and terminate the loop (use its actual name)
            countdownStarted = False # only necessary if you'll be using the countdown again elsewhere
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
      End Routine:
        thisExp.addData("typedWord", text_5.text)

        displayed_text = text_5.text

        reinforced_letters = ['z', 'x', 'd', 'g', 'y', 'i', 'h', 'u', 'a', 'l', 'c', 'p', 'n']# and so on
        pointcount = 0
        for letter in reinforced_letters:
            if letter in text_5.text:
                pointcount += 1

        if len(displayed_text) >= 1:
            frequency = pointcount/(len(displayed_text))
            print("Frequency: ",frequency)
            print("Frequency (as %): ", round(frequency*100, 2))
        else:
            frequency = 0

        if hcount <= 3 and frequency >= 0.3:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=6 and frequency >= 0.4:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=9 and frequency >= 0.5:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=12 and frequency >= 0.6:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=15 and frequency >= 0.7:
            nextRoutineNreps = 1
            hcount+=1
        else:
            nextRoutineNreps = 0
    KeyboardComponent endroutine_2
      allowedKeys = 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent hcount_1
      color = black
      letterHeight = 0.05
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $hcount
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    TextComponent displayhcount_1
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Hostage Count:
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    ImageComponent alien_1
      image = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/aliens1.png
      pos = (-0.6, 0.4)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    PolygonComponent box_text
      lineColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent countdowntimer
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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  Routine VAT1
    TextComponent sentence
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sentences
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    TextComponent choice1
      color = black
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_a
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    TextComponent choice2
      color = black
      letterHeight = 0.05
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_b
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    ImageComponent image
      image = aliens1.png
      pos = (-0.6, 0.4)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent endchoice
      allowedKeys = 'left', 'right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine VATrest
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine long_words
    TextComponent text_7
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        hcount = 0

        countdownStarted = False
      Begin Routine:
        modify = False
        text_7.text = ''
        event.clearEvents('keyboard')

        if not countdownStarted:
            countdownClock = core.CountdownTimer(600) # 300 s = 5 minutes
            countdownStarted = True

        if trials.thisN == 0:
            hcount = 0
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_7.text = text_7.text + ' '
            elif 'backspace' in keys:
                text_7.text = text_7.text[:-1]
            elif 'period' in keys:
                text_7.text = text_7.text + '.'
            elif 'comma' in keys:
                text_7.text = text_7.text + ','
            elif 'apostrophe' in keys:
                text_7.text = text_7.text + '\''
            elif 'question' in keys:
                text_7.text = text_7.text + '?'
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_7.text = text_7.text + keys[0].upper()
                    modify = False
                else:
                    text_7.text = text_7.text + keys[0]

        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            trials.finished = True # and terminate the loop (use its actual name)
            countdownStarted = False # only necessary if you'll be using the countdown again elsewhere
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
      End Routine:
        thisExp.addData("typedWord", text_7.text)

        displayed_text = text_7.text
        words = displayed_text.split()

        if len(words) >= 1:
            average_word_length = sum(len(word) for word in words) / len(words)
            print(average_word_length)
        else:
            average_word_length = 0

        if hcount <= 3 and average_word_length >= 4:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=6 and average_word_length >= 4.25:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=9 and average_word_length >= 4.5:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=12 and average_word_length >= 4.75:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=15 and average_word_length >= 5:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=18 and average_word_length >= 5.25:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=21 and average_word_length >= 5.5:
            nextRoutineNreps = 1
            hcount+=1
        else:
            nextRoutineNreps = 0
    KeyboardComponent endroutine_3
      allowedKeys = 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent actualcount
      color = black
      letterHeight = 0.05
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $hcount
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    TextComponent countdowntimer_3
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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    TextComponent displaytitlehcount
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Hostage Count:
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    ImageComponent red_alien
      image = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/aliens1.png
      pos = (-0.6, 0.4)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    PolygonComponent border_text
      lineColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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  Routine short_words
    TextComponent text_8
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        hcount = 0

        countdownStarted = False
      Begin Routine:
        modify = False
        text_8.text = ''
        event.clearEvents('keyboard')

        if not countdownStarted:
            countdownClock = core.CountdownTimer(600) # 300 s = 5 minutes
            countdownStarted = True

        if trials_2.thisN == 0:
            hcount = 0
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_8.text = text_8.text + ' '
            elif 'backspace' in keys:
                text_8.text = text_8.text[:-1]
            elif 'period' in keys:
                text_8.text = text_8.text + '.'
            elif 'comma' in keys:
                text_8.text = text_8.text + ','
            elif 'apostrophe' in keys:
                text_8.text = text_8.text + '\''
            elif 'question' in keys:
                text_8.text = text_8.text + '?'
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_8.text = text_8.text + keys[0].upper()
                    modify = False
                else:
                    text_8.text = text_8.text + keys[0]

        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            trials_2.finished = True # and terminate the loop (use its actual name)
            countdownStarted = False # only necessary if you'll be using the countdown again elsewhere
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
      End Routine:
        thisExp.addData("typedWord", text_8.text)

        displayed_text = text_8.text
        words = displayed_text.split()

        if len(words) >= 1:
            average_word_length = sum(len(word) for word in words) / len(words)
            print(average_word_length)
        else:
            average_word_length = 0

        if hcount <= 3 and average_word_length <= 4 and average_word_length>=1:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=6 and average_word_length <= 3.75 and average_word_length>=1:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=9 and average_word_length <= 3.5 and average_word_length>=1:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=12 and average_word_length <= 3.25 and average_word_length>=1:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=15 and average_word_length <= 3 and average_word_length>=1:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=18 and average_word_length <= 2.75 and average_word_length>=1:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=21 and average_word_length <= 2.5 and average_word_length>=1:
            nextRoutineNreps = 1
            hcount+=1
        else:
            nextRoutineNreps = 0
    KeyboardComponent endroutine_4
      allowedKeys = 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent showtimer
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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    TextComponent actualcount_2
      color = black
      letterHeight = 0.05
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $hcount
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    TextComponent displaytitlehcount_2
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Hostage Count:
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    PolygonComponent border_text_3
      lineColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent green_alien
      image = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/aliens2.png
      pos = (-0.6, 0.4)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine adjectives_text
    TextComponent text_9
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Before Experiment:
        import nltk
      Begin Experiment:
        hcount = 0
        countdownStarted = False
      Begin Routine:
        modify = False
        text_9.text = ''
        event.clearEvents('keyboard')

        if not countdownStarted:
            countdownClock = core.CountdownTimer(600) # 300 s = 5 minutes
            countdownStarted = True

        if trials.thisN == 0:
            hcount = 0
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_9.text = text_9.text + ' '
            elif 'backspace' in keys:
                text_9.text = text_9.text[:-1]
            elif 'period' in keys:
                text_9.text = text_9.text + '.'
            elif 'comma' in keys:
                text_9.text = text_9.text + ','
            elif 'apostrophe' in keys:
                text_9.text = text_9.text + '\''
            elif 'question' in keys:
                text_9.text = text_9.text + '?'
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_9.text = text_9.text + keys[0].upper()
                    modify = False
                else:
                    text_9.text = text_9.text + keys[0]

        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            trials.finished = True # and terminate the loop (use its actual name)
            countdownStarted = False # only necessary if you'll be using the countdown again elsewhere
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
      End Routine:
        thisExp.addData("typedWord", text_9.text)

        displayed_text = text_9.text
        print(displayed_text)

        sentences = nltk.word_tokenize(displayed_text)
        words = [nltk.word_tokenize(word) for word in sentences]
        tagged_words = [nltk.pos_tag(sent) for sent in words] #tagged_words is a list of lists of tuples (ordered pairs basically)
        print(tagged_words)

        #make an empty freqDist object
        tags = nltk.FreqDist()

        #for each list in tagged words, get the (word, tag) tuple, ex. (action, 'NN')
        # 'NN' is the tag in this case
        for pairs in tagged_words:
            for word,tag in pairs:
                #add 1 to the counts for each tag
                tags[tag] += 1

        #how to get (and print) the frequency of 'NN's
        print(tags.freq('JJ'))

        #how to print the FreqDist object
        print(tags.most_common())

        #sums up the desired frequencies, k is the 'NN' or 'VRB' or whatever
        freq_sum = 0
        for k in tags:
            #if it starts with capital n, its a noun, change this to 'V' if u want verbs
            if(k.startswith('JJ')):
                freq_sum += tags.freq(k)
        print("Frequency: ", freq_sum)
        print("Frequency (as %): ", round((freq_sum*(100)),2))

        if hcount <= 3 and freq_sum >= 0.2:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=6 and freq_sum >= 0.3:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=9 and freq_sum >= 0.4:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=12 and freq_sum >= 0.5:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=15 and freq_sum >= 0.6:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=18 and freq_sum >= 0.7:
            nextRoutineNreps = 1
            hcount+=1
        else:
            nextRoutineNreps = 0
    KeyboardComponent end_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent red_alien_2
      image = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/aliens1.png
      pos = (-0.6, 0.4)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent showtimer_2
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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    TextComponent actualhcount_2
      color = black
      letterHeight = 0.05
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $hcount
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    TextComponent displayhcount_3
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Hostage Count:
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    PolygonComponent textborder_2
      lineColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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  Routine verb_text
    TextComponent text_10
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Auto->JS
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      Before Experiment:
        import nltk
      Begin Experiment:
        hcount = 0
        countdownStarted = False
      Begin Routine:
        modify = False
        text_10.text = ''
        event.clearEvents('keyboard')

        if not countdownStarted:
            countdownClock = core.CountdownTimer(600) # 300 s = 5 minutes
            countdownStarted = True

        if trials_2.thisN == 0:
            hcount = 0
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_10.text = text_10.text + ' '
            elif 'backspace' in keys:
                text_10.text = text_10.text[:-1]
            elif 'period' in keys:
                text_10.text = text_10.text + '.'
            elif 'comma' in keys:
                text_10.text = text_10.text + ','
            elif 'apostrophe' in keys:
                text_10.text = text_10.text + '\''
            elif 'question' in keys:
                text_10.text = text_10.text + '?'
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_10.text = text_10.text + keys[0].upper()
                    modify = False
                else:
                    text_10.text = text_10.text + keys[0]

        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            trials_2.finished = True # and terminate the loop (use its actual name)
            countdownStarted = False # only necessary if you'll be using the countdown again elsewhere
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
      End Routine:
        thisExp.addData("typedWord", text_10.text)

        displayed_text = text_10.text
        print(displayed_text)

        sentences = nltk.word_tokenize(displayed_text)
        words = [nltk.word_tokenize(word) for word in sentences]
        tagged_words = [nltk.pos_tag(sent) for sent in words] #tagged_words is a list of lists of tuples (ordered pairs basically)
        print(tagged_words)

        #make an empty freqDist object
        tags = nltk.FreqDist()

        #for each list in tagged words, get the (word, tag) tuple, ex. (action, 'NN')
        # 'NN' is the tag in this case
        for pairs in tagged_words:
            for word,tag in pairs:
                #add 1 to the counts for each tag
                tags[tag] += 1

        #how to get (and print) the frequency of 'NN's
        print(tags.freq('VB'))

        #how to print the FreqDist object
        print(tags.most_common())

        #sums up the desired frequencies, k is the 'NN' or 'VRB' or whatever
        freq_sum = 0
        for k in tags:
            #if it starts with capital n, its a noun, change this to 'V' if u want verbs
            if(k.startswith('VB')):
                freq_sum += tags.freq(k)
        print("Frequency: ", freq_sum)
        print("Frequency (as %): ", round((freq_sum*(100)),2))

        if hcount <= 3 and freq_sum >= 0.2:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=6 and freq_sum >= 0.3:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=9 and freq_sum >= 0.4:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=12 and freq_sum >= 0.5:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=15 and freq_sum >= 0.6:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=18 and freq_sum >= 0.7:
            nextRoutineNreps = 1
            hcount+=1
        else:
            nextRoutineNreps = 0
    KeyboardComponent end_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent green_alien_2
      image = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/aliens2.png
      pos = (-0.6, 0.4)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent showtimer_3
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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    TextComponent actualhcount
      color = black
      letterHeight = 0.05
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $hcount
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    TextComponent displayhcount_4
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Hostage Count:
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    PolygonComponent textborder
      lineColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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  Routine pronouns_text
    TextComponent text_11
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
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      Before Experiment:
        import nltk
      Begin Experiment:
        hcount = 0
        countdownStarted = False
      Begin Routine:
        modify = False
        text_11.text = ''
        event.clearEvents('keyboard')

        if not countdownStarted:
            countdownClock = core.CountdownTimer(600) # 300 s = 5 minutes
            countdownStarted = True

        if trials.thisN == 0:
            hcount = 0
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_11.text = text_11.text + ' '
            elif 'backspace' in keys:
                text_11.text = text_11.text[:-1]
            elif 'period' in keys:
                text_11.text = text_11.text + '.'
            elif 'comma' in keys:
                text_11.text = text_11.text + ','
            elif 'apostrophe' in keys:
                text_11.text = text_11.text + '\''
            elif 'question' in keys:
                text_11.text = text_11.text + '?'
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_11.text = text_11.text + keys[0].upper()
                    modify = False
                else:
                    text_11.text = text_11.text + keys[0]

        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            trials.finished = True # and terminate the loop (use its actual name)
            countdownStarted = False # only necessary if you'll be using the countdown again elsewhere
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
      End Routine:
        thisExp.addData("typedWord", text_11.text)

        displayed_text = text_11.text
        print(displayed_text)

        sentences = nltk.word_tokenize(displayed_text)
        words = [nltk.word_tokenize(word) for word in sentences]
        tagged_words = [nltk.pos_tag(sent) for sent in words] #tagged_words is a list of lists of tuples (ordered pairs basically)
        print(tagged_words)

        #make an empty freqDist object
        tags = nltk.FreqDist()

        #for each list in tagged words, get the (word, tag) tuple, ex. (action, 'NN')
        # 'NN' is the tag in this case
        for pairs in tagged_words:
            for word,tag in pairs:
                #add 1 to the counts for each tag
                tags[tag] += 1

        #how to get (and print) the frequency of 'NN's
        print(tags.freq('PRP'))

        #how to print the FreqDist object
        print(tags.most_common())

        #sums up the desired frequencies, k is the 'NN' or 'VRB' or whatever
        freq_sum = 0
        for k in tags:
            #if it starts with capital n, its a noun, change this to 'V' if u want verbs
            if(k.startswith('PRP')):
                freq_sum += tags.freq(k)
        print("Frequency: ", freq_sum)
        print("Frequency (as %): ", round((freq_sum*(100)),2))

        if hcount <= 3 and freq_sum >= 0.1:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=6 and freq_sum >= 0.15:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=9 and freq_sum >= 0.2:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=12 and freq_sum >= 0.25:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=15 and freq_sum >= 0.3:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 18 and freq_sum >= 0.35:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 21 and freq_sum >= 0.4:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 24 and freq_sum >= 0.45:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 27 and freq_sum >= 0.5:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 30 and freq_sum >= 0.55:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 33 and freq_sum >= 0.6:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 36 and freq_sum >= 0.65:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 39 and freq_sum >= 0.7:
            nextRoutineNreps = 1
            hcount+=1
        else:
            nextRoutineNreps = 0
    KeyboardComponent end_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent red_alien_3
      image = /Users/hannah_checkeye/Desktop/UMW/Spring 2021/Verbal Shaping Experiment/stimuli:images/aliens1.png
      pos = (-0.6, 0.4)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent showtimer_4
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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    TextComponent actualhcount_4
      color = black
      letterHeight = 0.05
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $hcount
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    TextComponent displayhcount_5
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Hostage Count:
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    PolygonComponent textborder_4
      lineColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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  Routine adverbs_text
    TextComponent text_12
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Auto->JS
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      Before Experiment:
        import nltk
      Begin Experiment:
        hcount = 0
        countdownStarted = False
      Begin Routine:
        modify = False
        text_12.text = ''
        event.clearEvents('keyboard')

        if not countdownStarted:
            countdownClock = core.CountdownTimer(600) # 300 s = 5 minutes
            countdownStarted = True

        if trials_2.thisN == 0:
            hcount = 0
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_12.text = text_12.text + ' '
            elif 'backspace' in keys:
                text_12.text = text_12.text[:-1]
            elif 'period' in keys:
                text_12.text = text_12.text + '.'
            elif 'comma' in keys:
                text_12.text = text_12.text + ','
            elif 'apostrophe' in keys:
                text_12.text = text_12.text + '\''
            elif 'question' in keys:
                text_12.text = text_12.text + '?'
            elif 'exclamation' in keys:
                text_12.text = text_12.text + ''
            elif 'at' in keys:
                text_12.text = text_12.text + ''
            elif 'pound' in keys:
                text_12.text = text_12.text + ''
            elif 'dollar' in keys:
                text_12.text = text_12.text + ''
            elif 'percent' in keys:
                text_12.text = text_12.text + ''
            elif 'asciicircum' in keys:
                text_12.text = text_12.text + ''
            elif 'ampersand' in keys:
                text_12.text = text_12.text + ''
            elif 'asterisk' in keys:
                text_12.text = text_12.text + ''
            elif 'parenleft' in keys:
                text_12.text = text_12.text + ''
            elif 'parenright' in keys:
                text_13.text = text_13.text + ''
            elif 'underscore' in keys:
                text_12.text = text_12.text + ''
            elif 'minus' in keys:
                text_12.text = text_12.text + ''
            elif 'equal' in keys:
                text_12.text = text_12.text + ''
            elif 'plus' in keys:
                text_12.text = text_12.text + ''
            elif 'bracketleft' in keys:
                text_12.text = text_12.text + ''
            elif 'bracketright' in keys:
                text_12.text = text_12.text + ''
            elif 'braceleft' in keys:
                text_12.text = text_12.text + ''
            elif 'braceright' in keys:
                text_12.text = text_12.text + ''
            elif 'semicolon' in keys:
                text_12.text = text_12.text + ';'
            elif 'colon' in keys:
                text_12.text = text_12.text + ':'
            elif 'doublequote' in keys:
                text_12.text = text_12.text + ''
            elif 'backslash' in keys:
                text_12.text = text_12.text + ''
            elif 'slash' in keys:
                text_12.text = text_12.text + ''
            elif 'greater' in keys:
                text_12.text = text_12.text + ''
            elif 'less' in keys:
                text_12.text = text_12.text + ''
            elif 'quoteleft' in keys:
                text_12.text = text_12.text + ''
            elif 'asciitilde' in keys:
                text_12.text = text_12.text + ''
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_12.text = text_12.text + keys[0].upper()
                    modify = False
                else:
                    text_12.text = text_12.text + keys[0]

        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            trials_2.finished = True # and terminate the loop (use its actual name)
            countdownStarted = False # only necessary if you'll be using the countdown again elsewhere
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
      End Routine:
        thisExp.addData("adverbs input", text_12.text)

        displayed_text = text_12.text
        print(displayed_text)

        sentences = nltk.word_tokenize(displayed_text)
        words = [nltk.word_tokenize(word) for word in sentences]
        tagged_words = [nltk.pos_tag(sent) for sent in words] #tagged_words is a list of lists of tuples (ordered pairs basically)
        print(tagged_words)

        #make an empty freqDist object
        tags = nltk.FreqDist()

        #for each list in tagged words, get the (word, tag) tuple, ex. (action, 'NN')
        # 'NN' is the tag in this case
        for pairs in tagged_words:
            for word,tag in pairs:
                #add 1 to the counts for each tag
                tags[tag] += 1

        #how to get (and print) the frequency of 'NN's
        print(tags.freq('RB'))

        #how to print the FreqDist object
        print(tags.most_common())

        #sums up the desired frequencies, k is the 'NN' or 'VRB' or whatever
        freq_sum = 0
        for k in tags:
            #if it starts with capital n, its a noun, change this to 'V' if u want verbs
            if(k.startswith('RB')):
                freq_sum += tags.freq(k)
        print("Frequency: ", freq_sum)
        print("Frequency (as %): ", round((freq_sum*(100)),2))

        if hcount <= 3 and freq_sum >= 0.1:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=6 and freq_sum >= 0.15:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=9 and freq_sum >= 0.2:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=12 and freq_sum >= 0.25:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=15 and freq_sum >= 0.3:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 18 and freq_sum >= 0.35:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 21 and freq_sum >= 0.4:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 24 and freq_sum >= 0.45:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 27 and freq_sum >= 0.5:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 30 and freq_sum >= 0.55:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 33 and freq_sum >= 0.6:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 36 and freq_sum >= 0.65:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 39 and freq_sum >= 0.7:
            nextRoutineNreps = 1
            hcount+=1
        else:
            nextRoutineNreps = 0

        thisExp.addData('Hostage Count', hcount)
        thisExp.addData('Frequency of adverbs', freq_sum)
    KeyboardComponent end_5
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent green_alien_3
      image = aliens2.png
      pos = (-0.6, 0.4)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent showtimer_5
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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    TextComponent actualhcount_3
      color = black
      letterHeight = 0.05
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $hcount
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    TextComponent displayhcount_6
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Hostage Count:
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    PolygonComponent textborder_3
      lineColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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  Routine conjunctions_text
    TextComponent text_13
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Auto->JS
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      Before Experiment:
        import nltk
      Begin Routine:
        modify = False
        text_13.text = ''
        event.clearEvents('keyboard')

        if trials.thisN == 0:
            hcount = 0

        if not countdownStarted:
            countdownClock = core.CountdownTimer(600) # 300 s = 5 minutes
            countdownStarted = True
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_13.text = text_13.text + ' '
            elif 'backspace' in keys:
                text_13.text = text_13.text[:-1]
            elif 'period' in keys:
                text_13.text = text_13.text + '.'
            elif 'comma' in keys:
                text_13.text = text_13.text + ','
            elif 'apostrophe' in keys:
                text_13.text = text_13.text + '\''
            elif 'question' in keys:
                text_13.text = text_13.text + '?'
            elif 'exclamation' in keys:
                text_13.text = text_13.text + ''
            elif 'at' in keys:
                text_13.text = text_13.text + ''
            elif 'pound' in keys:
                text_13.text = text_13.text + ''
            elif 'dollar' in keys:
                text_13.text = text_13.text + ''
            elif 'percent' in keys:
                text_13.text = text_13.text + ''
            elif 'asciicircum' in keys:
                text_13.text = text_13.text + ''
            elif 'ampersand' in keys:
                text_13.text = text_13.text + ''
            elif 'asterisk' in keys:
                text_13.text = text_13.text + ''
            elif 'parenleft' in keys:
                text_13.text = text_13.text + ''
            elif 'parenright' in keys:
                text_13.text = text_13.text + ''
            elif 'underscore' in keys:
                text_13.text = text_13.text + ''
            elif 'minus' in keys:
                text_13.text = text_13.text + ''
            elif 'equal' in keys:
                text_13.text = text_13.text + ''
            elif 'plus' in keys:
                text_13.text = text_13.text + ''
            elif 'bracketleft' in keys:
                text_13.text = text_13.text + ''
            elif 'bracketright' in keys:
                text_13.text = text_13.text + ''
            elif 'braceleft' in keys:
                text_13.text = text_13.text + ''
            elif 'braceright' in keys:
                text_13.text = text_13.text + ''
            elif 'semicolon' in keys:
                text_13.text = text_13.text + ';'
            elif 'colon' in keys:
                text_13.text = text_13.text + ':'
            elif 'doublequote' in keys:
                text_13.text = text_13.text + ''
            elif 'backslash' in keys:
                text_13.text = text_13.text + ''
            elif 'slash' in keys:
                text_13.text = text_13.text + ''
            elif 'greater' in keys:
                text_13.text = text_13.text + ''
            elif 'less' in keys:
                text_13.text = text_13.text + ''
            elif 'quoteleft' in keys:
                text_13.text = text_13.text + ''
            elif 'asciitilde' in keys:
                text_13.text = text_13.text + ''
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_13.text = text_13.text + keys[0].upper()
                    modify = False
                else:
                    text_13.text = text_13.text + keys[0]


        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            trials.finished = True # and terminate the loop (use its actual name)
            countdownStarted = False # only necessary if you'll be using the countdown again elsewhere
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
      End Routine:
        thisExp.addData("tconjunctions input", text_13.text)

        displayed_text = text_13.text
        print(displayed_text)

        sentences = nltk.word_tokenize(displayed_text)
        words = [nltk.word_tokenize(word) for word in sentences]
        tagged_words = [nltk.pos_tag(sent) for sent in words] #tagged_words is a list of lists of tuples (ordered pairs basically)
        print(tagged_words)

        #make an empty freqDist object
        tags = nltk.FreqDist()

        #for each list in tagged words, get the (word, tag) tuple, ex. (action, 'NN')
        # 'NN' is the tag in this case
        for pairs in tagged_words:
            for word,tag in pairs:
                #add 1 to the counts for each tag
                tags[tag] += 1

        #how to get (and print) the frequency of 'NN's
        print(tags.freq('CC'))

        #how to print the FreqDist object
        print(tags.most_common())

        #sums up the desired frequencies, k is the 'NN' or 'VRB' or whatever
        freq_sum = 0

        for k in tags:
            #if it starts with capital n, its a noun, change this to 'V' if u want verbs
            if(k.startswith('CC')):
                freq_sum += tags.freq(k)
        print("Frequency: ", freq_sum)
        print("Frequency (as %): ", round((freq_sum*(100)),2))

        if hcount <= 3 and freq_sum >= 0.1:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=6 and freq_sum >= 0.15:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=9 and freq_sum >= 0.2:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=12 and freq_sum >= 0.25:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <=15 and freq_sum >= 0.3:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 18 and freq_sum >= 0.35:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 21 and freq_sum >= 0.4:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 24 and freq_sum >= 0.45:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 27 and freq_sum >= 0.5:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 30 and freq_sum >= 0.55:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 33 and freq_sum >= 0.6:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 36 and freq_sum >= 0.65:
            nextRoutineNreps = 1
            hcount+=1
        elif hcount <= 39 and freq_sum >= 0.7:
            nextRoutineNreps = 1
            hcount+=1
        else:
            nextRoutineNreps = 0

        thisExp.addData('Hostage Count', hcount)
        thisExp.addData('Frequency of conjunctions', freq_sum)
    KeyboardComponent end_7
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent actualcount1
      color = black
      letterHeight = 0.05
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $hcount
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    TextComponent displayhcount_7
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Hostage Count:
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    ImageComponent alien
      image = aliens1.png
      pos = (-0.6, 0.4)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    PolygonComponent border_text_4
      lineColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent countdowntimer_4
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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  Routine participantID
    TextComponent explain
      color = black
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        In order to use your data, we need to identify you with a unique participant code.

        This code will consist of the following: the first three letters of the street you live on, followed by the last three letters of your mother’s name, followed by the first two letters of your birth month.

        For example, if the street name is ‘Road’, the mother’s name ‘Tracy’, and the birth month is ‘January’, the example code would be ROAACYJA

        Please enter your unique code below and then press enter:
    TextComponent participantcode
      color = red
      letterHeight = 0.1
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        participantcode.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                participantcode.text = participantcode.text + ' '
            elif 'backspace' in keys:
                participantcode.text = participantcode.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            else:
                if modify:
                    participantcode.text = participantcode.text + keys[0].upper()
                    modify = False
                else:
                    participantcode.text = participantcode.text + keys[0]
      End Routine:
        thisExp.addData("participant code", participantcode.text)
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_14
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;

        Array.prototype.count = function(value) {
        let count = 0;
        this.forEach(item => {
        if (item === value) {
        count++;
        }
        });
        return count;
        }

        sum = function (arr) {
        return arr.reduce((a,b)=>a+b)
        }
  Routine practice_VAT_instructions
    TextComponent text_14
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        While you are communicating with the officer, a sample fragmented message will be sent to you. You must decode that message, and continue communicating. To decode the message, choose which word best completes the phrase in the middle of the screen by pressing either the left or right arrow key. Please work as quickly as possible.

        Press return when you are ready to begin.
    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_VAT
    TextComponent sentence_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sentences
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    TextComponent choice1_3
      color = black
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_a
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    TextComponent choice2_3
      color = black
      letterHeight = 0.05
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_b
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    KeyboardComponent endchoice_3
      allowedKeys = 'left', 'right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent VATkeys
      color = red
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the left key to choose the left word and the right key to choose the right word
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  Routine VAT1instruct
    TextComponent instructions_choice1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ALERT: The United States Government has intercepted a message from the Qiczox commander. To decode the message, choose which word best completes the phrase in the middle of the screen by pressing either the left or right arrow key. Please work as quickly as possible.

        Press return when you are ready to begin
    KeyboardComponent endchoice1instruct
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VAT2instruct
    TextComponent choice2instructtext
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ALERT: The United States Government has received another message, but it is from the Kivix commander. To decode the message, choose which word best completes the phrase in the middle of the screen by pressing either the left or right arrow key. Please work as quickly as possible.

        Press return to continue
    KeyboardComponent endchoice2instruct
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VAT_2
    TextComponent sentence_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sentences
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    TextComponent choice1_2
      color = black
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_a
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    TextComponent choice2_2
      color = black
      letterHeight = 0.05
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $choice_b
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    ImageComponent image_2
      image = aliens2.png
      pos = (0.5, 0.35)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent endchoice_2
      allowedKeys = 'left', 'right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine VATrest2
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine debrief
    TextComponent endexperiment
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!

        Please fill out the qualtrics survey and review the debriefing form.
Flow
  Routine participantID
  LoopInitiator instructloop loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructionsloop', 'ADULT  RESEARCH  PARTICIPANT  INFORMED  CONSENT  FORM ')]),
      OrderedDict([('instructionsloop', 'Brief Description: The purpose of this research is to perform an experimental analysis of typed communication. Individuals who volunteer to participate in this study will play a fictional game on their computers in which they attempt to free hostages from fictional aliens by performing an ongoing typing task. We require that any participant be at least 18 years of age to participate.')]),
      OrderedDict([('instructionsloop', 'Please read the remainder of this form before deciding if you want to volunteer to be in this research study.')]),
      OrderedDict([('instructionsloop', 'Our names are Hannah J. Checkeye, Kathleen E. Daley, Angeline S. Gnanasekaren, Jenna M. Holland, and Kaitlyn R. Ownbey; we are undergraduate psychology researchers at the University of Mary Washington studying under Dr. W. David Stahlman. We are seeking your consent to participate in this research study. Involvement in the study is voluntary, so you may choose to participate or not. The information below explains the study in detail. ')]),
      OrderedDict([('instructionsloop', 'Details of Participant Involvement: We are interested in learning more about typed communication. If you agree to participate, you will be asked to complete demographic questions, a typing game, choice tasks, and a post-game survey.')])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
    Routine instructions
  LoopTerminator instructloop
  LoopInitiator practice_instructloop loopType="TrialHandler"
    conditionsFile = instructions_practiceround.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('practice_instructions', 'PRACTICE ROUND')]),
      OrderedDict([('practice_instructions', 'To make sure you are able to maintain continuous communication with the alien commanders, we have arranged a practice communication task with one of our communication officers. This officer will mimic the communication of the alien species. You will need to communicate continuously with the officer by typing on your keyboard. They should only include letter and punctuation keys, with no special characters, number keys, or function keys. Remember that our officer will be communicating like the aliens, who do not think in the same way you do. ')]),
      OrderedDict([('practice_instructions', 'Once you decide that your message is complete, hit the return key to begin a new message. While you are communicating with the officer, a sample fragmented message will be sent to you. You must decode that message, and continue communicating. To decode the message, choose which word best completes the phrase in the middle of the screen. The message will only be visible for a few seconds, so work quickly. Remember that our officer will be communicating like the aliens, who do not think in the same way you do. When you are ready to begin alien communicatio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
    Routine instructions_practice
  LoopTerminator practice_instructloop
  LoopInitiator practice_trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 4
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    Routine practice_round
    LoopInitiator present_reinforcement1 loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = nextRoutineNreps
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      Routine reinforcement
    LoopTerminator present_reinforcement1
  LoopTerminator practice_trials
  Routine practice_VAT_instructions
  LoopInitiator practice_VAT_trials loopType="TrialHandler"
    conditionsFile = practicevat.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sentences', 'Birds run ____ fault'), ('choice_a', 'green'), ('choice_b', 'disgusting')]),
      OrderedDict([('sentences', 'Stars blow meet ____'), ('choice_a', 'castle'), ('choice_b', 'field')]),
      OrderedDict([('sentences', 'Catch ____ tree back'), ('choice_a', 'screen'), ('choice_b', 'drink')]),
      OrderedDict([('sentences', '_____ school come pole'), ('choice_a', 'kick'), ('choice_b', 'water')])]
    Routine VATrest
    Routine practice_VAT
  LoopTerminator practice_VAT_trials
  LoopInitiator r1_instruct loopType="TrialHandler"
    conditionsFile = round1_instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instruct_1', 'Now that you have completed the practice task, you are ready to begin official communication with the Qiczox and Kivix commanders as the United States Interstellar Messenger and Decoder. You will need to communicate with the commanders by typing on your keyboard. Your messages need to be rapid, complete, and engaging. ')]),
      OrderedDict([('instruct_1', 'They should only include letter and punctuation keys, with no special characters, number keys, or function keys. Once you decide that your message is complete, hit the return key to send it and then begin a new message. Remember that these are alien species, so they do not think in the same way you do. When you are ready to begin alien communication, press the return key.\xa0')])]
    Routine instructions_round1
  LoopTerminator r1_instruct
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1000
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    Routine conjunctions_text
    LoopInitiator present_reinforcement loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = nextRoutineNreps
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      Routine reinforcement
    LoopTerminator present_reinforcement
  LoopTerminator trials
  Routine VAT1instruct
  LoopInitiator VAT1trials loopType="TrialHandler"
    conditionsFile = VAT_Conjunction.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sentences', 'Question dissects _____ unkempt summer.\xa0'), ('choice_a', 'Confuse'), ('choice_b', 'Accordingly'), ('corr_ans', 'right')]),
      OrderedDict([('sentences', 'Mountain check _____ numerous jobs.\xa0'), ('choice_a', 'Actually'), ('choice_b', 'Crevice'), ('corr_ans', 'left')]),
      OrderedDict([('sentences', 'Shake look _____ fast delicate.\xa0'), ('choice_a', 'After'), ('choice_b', 'Perception'), ('corr_ans', 'left')]),
      OrderedDict([('sentences', '\xa0Basic arranges _____ somber educational.\xa0'), ('choice_a', 'Afterward'), ('choice_b', 'Dialogue'), ('corr_ans', 'left')]),
      OrderedDict([('sentences', '\xa0Mindless sand _____ wilderness spoon.\xa0'), ('choice_a', 'Also'), ('choice_b', 'Instruction'), ('corr_ans', 'left')]),
      OrderedDict([('sentences', '\xa0Measure _____ flashy wood.\xa0'), ('choice_a', 'Sentiment'), ('choice_b', 'And'), ('corr_ans', 'right')]),
      OrderedDict([('sentences', '\xa0Equal detail _____ longing week.\xa0'), ('choice_a', 'Superintendent'), ('choice_b', 'Still'), ('corr_ans', 'right')]),
      OrderedDict([('sentences', '\xa0Frustration standardizes _____ penguins.\xa0'), ('choice_a', 'Such as'), ('choice_b', 'Inspiration'), ('corr_ans', 'left')]),
      OrderedDict([('sentences', '\xa0The earth _____ careful room.\xa0'), ('choice_a', 'Illustrate'), ('choice_b', 'Too'), ('corr_ans', 'right')]),
      OrderedDict([('sentences', '\xa0A deep reaction _____ grassy chairs.\xa0'), ('choice_a', 'Thus '), ('choice_b', 'Vigorous'), ('corr_ans', 'left')])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
    Routine VATrest
    Routine VAT1
  LoopTerminator VAT1trials
  Routine break_1
  Routine introducecont2
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine adverbs_text
    LoopInitiator present_reinforcement2 loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = nextRoutineNreps
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      Routine reinforcement
    LoopTerminator present_reinforcement2
  LoopTerminator trials_2
  Routine VAT2instruct
  LoopInitiator IAT2trials loopType="TrialHandler"
    conditionsFile = VAT_Adverbs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sentences', '\xa0Voice maintains _____ common unique.\xa0'), ('choice_a', 'Confuse'), ('choice_b', 'Strongly'), ('corr_ans', 'right')]),
      OrderedDict([('sentences', '\xa0Laughing logs _____ selfish salt.\xa0'), ('choice_a', 'Joyfully'), ('choice_b', 'Marry '), ('corr_ans', 'left')]),
      OrderedDict([('sentences', '\xa0Joint _____ pink selfish.\xa0'), ('choice_a', 'Curiously'), ('choice_b', 'Kiss '), ('corr_ans', 'left')]),
      OrderedDict([('sentences', '\xa0Burns summarizes _____ direction.\xa0'), ('choice_a', 'Discover'), ('choice_b', 'Lively'), ('corr_ans', 'right')]),
      OrderedDict([('sentences', '\xa0Instrument render _____ noxious wash.\xa0'), ('choice_a', 'Whine'), ('choice_b', 'Safely'), ('corr_ans', 'right')]),
      OrderedDict([('sentences', '\xa0Hypnotic _____ spokes the idea.\xa0'), ('choice_a', 'Promptly'), ('choice_b', 'Decide'), ('corr_ans', 'left')]),
      OrderedDict([('sentences', '\xa0Approval categorizes _____ far amusement.\xa0'), ('choice_a', 'Squeal'), ('choice_b', 'Offensively'), ('corr_ans', 'right')]),
      OrderedDict([('sentences', '\xa0Waggish motion _____ looking shade.\xa0'), ('choice_a', 'Sneeze'), ('choice_b', 'Gladly'), ('corr_ans', 'left')]),
      OrderedDict([('sentences', '\xa0Slope aides _____ impossible muddled.\xa0'), ('choice_a', 'Greedily'), ('choice_b', 'Start'), ('corr_ans', 'left')]),
      OrderedDict([('sentences', '\xa0Invincible _____ combines surprising.\xa0'), ('choice_a', 'Spell'), ('choice_b', 'Slightly'), ('corr_ans', 'right')])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
    Routine VATrest2
    Routine VAT_2
  LoopTerminator IAT2trials
  Routine debrief
